OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  Abre un socket para leer información del experimento, señales, estimulaciones y datos de localización del canal enviados a través de la red.
  Acquisition client
Comment
  Permite seleccionar el canal
Comment
  Escribe la señal en un documento
Comment
  Este complemento utiliza el filtro Butterworth
  0.1Hz a 30Hz
Comment
  Visualiza la señal nativa
Comment
  Visualiza la señal filtrada

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "EOG1" => #1
  Channel List = EOG1
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #2
  Filter Type = Band Pass
  Filter Order = 3
  Low Cut-off Frequency (Hz) = 0.1
  High Cut-off Frequency (Hz) = 30
Input signal=#2, Input stimulations=#0.Stimulations -> 0x341d3912 LSL Export (Gipsa)
  Stream name = OpenViBE Stream
  Stream type = EOG
Data=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#1, Stimulations=#0.Stimulations -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> 0x341d3912 Generic stream writer
  Filename = C:/Users/esteb/OneDrive/Documentos/10. Decimo Semestre/Proyecto 2/PCB/EOG Prueba/EOG-signal-4-online-[$core{date}-$core{time}].ov
  Use compression = false
