OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  Abre un archivo local para leer información del experimento, señales, estimulaciones y datos de localización del canal enviados a través de un archivo .ov
  Generic stream reader
Comment
  Reproduce un archivo local .ov
Comment
  Permite seleccionar el canal
Comment
  Este complemento utiliza el filtro Butterworth
  0.5Hz a 30Hz
Comment
  Visualiza la señal filtrada
Comment
  Visualiza la señal nativa

Generic stream reader => #0
  Filename = C:/Users/esteb/OneDrive/Documentos/Git/Carro_Bluetooth_EOG/OpenVibe_Designer/Data/Pruebas EOG/EOG-signal-1-online-[2025.04.09-20.11.55].ov
#0.Output stream 2 -> Channel Selector "EOG1" => #1
  Channel List = EOG1
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #2
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 0.5
  High Cut-off Frequency (Hz) = 30
Data=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#2 -> LSL Export (Gipsa)
  Stream name = OpenViBE Stream
  Stream type = Data2
#2 -> 0x341d3912 CSV File Writer (Deprecated)
  Filename = record-[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#1 -> LSL Export (Gipsa)
  Stream name = OpenViBE Stream
  Stream type = Data1
#1 -> 0x341d3912 CSV File Writer (Deprecated)
  Filename = record-[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Data=#1 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
