OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)

Sinus oscillator => #0
  Channel count = 1
  Sampling frequency = 512
  Generated epoch sample count = 32
Input signal=#0 -> LSL Export (Gipsa)
  Stream name = OpenViBE Stream
  Stream type = P2
Data=#0 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Sinus oscillator => #3
  Channel count = 1
  Sampling frequency = 512
  Generated epoch sample count = 32
Input signal=#3 -> LSL Export (Gipsa)
  Stream name = OpenViBE Stream
  Stream type = P1
Data=#3 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
